PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = experiment
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Routines
  Routine sentence1
    ImageComponent grid1
      image [set every repeat] = /Users/tianasimovic/Desktop/experiment/stimuli/trial1s1/grid.jpg
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (0, 0)
      size [set every repeat] = (1, .8)
      startVal [time (s)] = 0
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = final
      startVal [time (s)] = 0
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    ImageComponent arugula1
      image = /Users/tianasimovic/Desktop/experiment/stimuli/trial1s1/arugula.png
      pos = (-0.124, -0.27)
      size = (0.24, 0.26)
      startVal [time (s)] = 0
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    ImageComponent thicktriangle1
      image = /Users/tianasimovic/Desktop/experiment/stimuli/trial1s1/thicktriangle.png
      pos = (0.124, 0.01)
      size = (0.24, 0.22)
      startVal [time (s)] = 0
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    ImageComponent thintriangle1
      image = /Users/tianasimovic/Desktop/experiment/stimuli/trial1s1/thintriangle.png
      pos = (-0.371, 0.01)
      size = (0.24, 0.22)
      startVal [time (s)] = 0
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    ImageComponent fortunecookie1
      image = /Users/tianasimovic/Desktop/experiment/stimuli/trial1s1/fortunecookie.png
      pos = (-0.358, 0.26)
      size = (0.22, 0.22)
      startVal [time (s)] = 0
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    ImageComponent ducky1
      image = /Users/tianasimovic/Desktop/experiment/stimuli/trial1s1/ducky.png
      pos = (-.112, 0.26)
      size = (0.33, 0.33)
      startVal [time (s)] = 0
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    ImageComponent duckyhat1
      image = /Users/tianasimovic/Desktop/experiment/stimuli/trial1s1/duckyhat.png
      pos = (0.371, 0.26)
      size = (0.22, 0.22)
      startVal [time (s)] = 0
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    SoundComponent S1
      sound = /Users/tianasimovic/Desktop/experiment/stimuli/audio/triangle_S1.ogg
      startVal [time (s)] = 0.5
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        myPics = [thintriangle1]
      Each Frame:
        for pic in myPics:
            if mouse.isPressedIn(pic):
                pic.pos = mouse.getPos()
    KeyboardComponent key_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
      syncScreenRefresh = False
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  Routine sentence2
    ImageComponent grid2
      image = /Users/tianasimovic/Desktop/experiment/stimuli/trial1s2/grid
      size = (1, .8)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_2
      forceEndRoutineOnPress = never
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent arugula2
      image = /Users/tianasimovic/Desktop/experiment/stimuli/trial1s2/arugula.png
      pos = (-0.124, -0.27)
      size = (0.24, 0.26)
      startVal [time (s)] = 0.0
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    ImageComponent thicktriangle2
      image = /Users/tianasimovic/Desktop/experiment/stimuli/trial1s2/thicktriangle.png
      pos = (0.124, 0.01)
      size = (0.24, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent thintriangle2
      image = /Users/tianasimovic/Desktop/experiment/stimuli/trial1s2/thintriangle.png
      pos = (0.371, 0.01)
      size = (0.24, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent fortunecookie2
      image = /Users/tianasimovic/Desktop/experiment/stimuli/trial1s2/fortunecookie.png
      pos = (-0.358, 0.26)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent ducky2
      image = /Users/tianasimovic/Desktop/experiment/stimuli/trial1s2/ducky.png
      pos = (-.112, 0.26)
      size = (0.33, 0.33)
      startVal [time (s)] = 0.0
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    ImageComponent duckyhat2
      image = /Users/tianasimovic/Desktop/experiment/stimuli/trial1s2/duckyhat.png
      pos = (0.371, 0.26)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        myPics = [thintriangle1, thintriangle2]
      Each Frame:
        for pic in myPics:
            if mouse.isPressedIn(pic):
                pic.pos = mouse.getPos()
    SoundComponent S2
      sound = /Users/tianasimovic/Desktop/experiment/stimuli/audio/triangle_S2.ogg
      startVal [time (s)] = 0.4
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instructions
    TextComponent text
      font = helvetica
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this trial, you will hear instructions. Perform the instructed task by dragging and dropping the object into its appropriate bin.

        Press the SPACE BAR once the action is completed.


        Press the SPACE BAR to begin.
    KeyboardComponent start
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Instructions
  Routine sentence1
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:2
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [OrderedDict([('AudioFile', '/Users/tianasimovic/Desktop/experiment/stimuli/audio/bin9.ogg'), ('Bin', 'bin9')]),
      OrderedDict([('AudioFile', '/Users/tianasimovic/Desktop/experiment/stimuli/audio/bin3.ogg'), ('Bin', 'bin3')]),
      OrderedDict([('AudioFile', '/Users/tianasimovic/Desktop/experiment/stimuli/audio/bin11.ogg'), ('Bin', 'bin11')])]
    Routine sentence2
  LoopTerminator trials
